<TemplateDefinitions>

	<Components>

		<Plugin>
			<attr name="name" required="yes" default="MIRC"/>
			<attr name="class" required="yes" default="mirc.MIRC" editable="no"/>
			<attr name="root" required="yes" default="mircsite"/>
		</Plugin>

		<StorageService>
			<attr name="name" required="yes" default="MircFileStorageService"/>
			<attr name="class" required="yes" default="mirc.stages.MircFileStorageService" editable="no"/>
			<attr name="root" required="yes" default="roots/FileService/MircFileStorageService"/>
			<attr name="fsNameTag" required="no" default="">
				<helptext>DICOM tag to use to obtain the username for storage in the file cabinets</helptext>
			</attr>
			<attr name="quarantine" required="yes" default="quarantines/FileService/MircFileStorageService"/>
		</StorageService>

		<StorageService>
			<attr name="name" required="yes" default="MircDocumentStorageService"/>
			<attr name="class" required="yes" default="mirc.stages.MircDocumentStorageService" editable="no"/>
			<attr name="root" required="yes" default="roots/DicomService/MircDocumentStorageService"/>
			<attr name="caseTag" required="no" default="StudyInstanceUID">
				<helptext>DICOM tag to use for grouping images into MIRCdocuments</helptext>
			</attr>
			<attr name="templateName" required="no" default="">
				<helptext>File name of template for creating new MIRCdocuments</helptext>
			</attr>
			<attr name="quarantine" required="yes" default="quarantines/DicomService/MircDocumentStorageService"/>
		</StorageService>

		<StorageService>
			<attr name="name" required="yes" default="TCEStorageService"/>
			<attr name="class" required="yes" default="mirc.stages.TCEStorageService" editable="no"/>
			<attr name="root" required="yes" default="roots/TCEService/TCEStorageService"/>
			<attr name="anonymize" required="yes" default="no" options="yes|no">
				<helptext>Anonymize received DICOM objects</helptext>
			</attr>
			<attr name="script" required="no" default="scripts/TCEServiceAnonymizer.script">
				<helptext>File name of DicomAnonymizer script</helptext>
			</attr>
			<attr name="lookupTable" required="no" default="scripts/TCEServiceAnonymizerLookupTable.properties">
				<helptext>File name of DicomAnonymizer lookup table</helptext>
			</attr>
			<attr name="ssid" required="no" default="ss1">
				<helptext>Default target library ID</helptext>
			</attr>
			<attr name="ssidTag" required="no" default="00120010">
				<helptext>DICOM tag from which to obtain the target library ID</helptext>
			</attr>
			<attr name="quarantine" required="yes" default="quarantines/TCEService/TCEStorageService"/>
		</StorageService>

	</Components>

	<StandardPipelines>

		<Pipeline name="TFS File Service">
			<DicomImportService
				calledAETTag="00120010"
				class="org.rsna.ctp.stdstages.DicomImportService"
				logConnections="rejected"
				name="File Service DicomImportService"
				port="1081"
				quarantine="quarantines/FileService/DicomImportService"
				root="roots/FileService/DicomImportService"
				suppressDuplicates="no"/>
			<DicomAnonymizer
				class="org.rsna.ctp.stdstages.DicomAnonymizer"
				lookupTable="scripts/lookup-table.properties"
				name="File Service DicomAnonymizer"
				quarantine="quarantines/FileService/DicomAnonymizer"
				root="roots/FileService/DicomAnonymizer"
				script="scripts/FileService/MircFileServiceAnonymizer.script"/>
			<MircFileStorageService
				class="mirc.stages.MircFileStorageService"
				fsNameTag="00120010"
				name="MircFileStorageService"
				quarantine="quarantines/FileService/MircFileStorageService"
				root="roots/FileService/MircFileStorageService"/>
		</Pipeline>

		<Pipeline name="TFS DICOM Service">
			<DicomImportService
				calledAETTag="00120010"
				callingAETTag="00120020"
				class="org.rsna.ctp.stdstages.DicomImportService"
				logConnections="rejected"
				name="DICOM Service DicomImportService"
				port="1082"
				quarantine="quarantines/DicomService/DicomImportService"
				root="roots/DicomService/DicomImportService"
				suppressDuplicates="no"/>
			<DicomDecompressor
				class="org.rsna.ctp.stdstages.DicomDecompressor"
				name="DicomDecompressor"
				quarantine="quarantines/DicomService/DicomDecompressor"
				root="roots/DicomService/DicomDecompressor"
				script="scripts/DicomDecompressor.script"/>
			<ObjectCache
				class="org.rsna.ctp.stdstages.ObjectCache"
				collectGarbage="yes"
				root="roots/DicomService/ObjectCache"
				name="ObjectCache"/>
			<DicomPixelAnonymizer
				class="org.rsna.ctp.stdstages.DicomPixelAnonymizer"
				name="DicomPixelAnonymizer"
				quarantine="quarantines/DicomService/DicomPixelAnonymizer"
				root="roots/DicomService/DicomPixelAnonymizer"
				script="scripts/dicom-pixel-anonymizer.script"/>
			<Anonymizer
				class="org.rsna.ctp.stdstages.DicomAnonymizer"
				lookupTable="scripts/LookupTable.properties"
				name="DICOM Service DicomAnonymizer - ForcePatientID"
				quarantine="quarantines/DicomService/ForcePatientID"
				root="roots/DicomService/ForcePatientID"
				script="scripts/ForcePatientID.script"/>
			<MircDocumentStorageService
				caseTag="PatientID"
				class="mirc.stages.MircDocumentStorageService"
				name="MircDocumentStorageService"
				quarantine="quarantines/DicomService/MircDocumentStorageService"
				root="roots/DicomService/MircDocumentStorageService"/>
			<DicomAnonymizer
				class="org.rsna.ctp.stdstages.DicomAnonymizer"
				lookupTable="scripts/lookup-table.properties"
				name="DICOM Service DicomAnonymizer"
				quarantine="quarantines/DicomService/DicomAnonymizer"
				root="roots/DicomService/DicomAnonymizer"
				script="scripts/DicomServiceAnonymizer.script"/>
		</Pipeline>

		<Pipeline name="TFS TCE Service">
			<DicomImportService
				calledAETTag="00120010"
				class="org.rsna.ctp.stdstages.DicomImportService"
				logConnections="rejected"
				name="TCE Service DicomImportService"
				port="1083"
				quarantine="quarantines/TCEService/DicomImportService"
				root="roots/TCEService/DicomImportService"
				suppressDuplicates="no"/>
			<HttpImportService
				acceptDicomObjects="yes"
				acceptFileObjects="yes"
				acceptXmlObjects="yes"
				acceptZipObjects="yes"
				class="org.rsna.ctp.stdstages.HttpImportService"
				logConnections="rejected"
				name="TCE Service HttpImportService"
				port="1084"
				quarantine="quarantines/TCEService/HttpImportService"
				requireAuthentication="no"
				root="roots/TCEService/HttpImportService"
				ssl="no"
				zip="no"/>
			<TCEStorageService
				anonymize="yes"
				class="mirc.stages.TCEStorageService"
				name="TCEStorageService"
				quarantine="quarantines/TCEService/TCEStorageService"
				root="roots/TCEService/TCEStorageService"
				script="scripts/TCEServiceAnonymizer.script"
				lookupTable="scripts/TCEServiceAnonymizerLookupTable.properties"
				ssid="ss1"
				ssidTag="00120010"/>
		</Pipeline>

	</StandardPipelines>

</TemplateDefinitions>

